begin model

begin parameters
    n_flagella  5
    k_bind      0.000141149119893723
    k_nucleation 0.05
    k_completion 10.0

    k_nuc_flhDC  1.411491e-07
    k_nuc_flagellar_motor_switch  1.411491e-07
    k_nuc_flagellar_export_apparatus_subunit  1.411491e-07
    k_nuc_flagellar_export_apparatus  1.411491e-07
    k_nuc_flagellar_motor  1.411491e-07
    k_nuc_flagellar_hook  1.411491e-07
    k_nuc_flagella  1.411491e-07

    flgB_0  25
    flgC_0  30
    flgE_0  600
    flgF_0  25
    flgG_0  120
    flgH_0  130
    flgI_0  130
    flgK_0  55
    flgL_0  55
    flhA_0  45
    flhB_0  5
    flhC_0  10
    flhD_0  20
    fliD_0  25
    fliE_0  30
    fliF_0  170
    fliG_0  170
    fliH_0  60
    fliI_0  30
    fliJ_0  5
    fliL_0  10
    fliM_0  170
    fliN_0  555
    fliO_0  5
    fliP_0  25
    fliQ_0  20
    fliR_0  5
    motA_0  275
    motB_0  110
end parameters

begin molecule types
    flgB()
    flgC()
    flgE()
    flgF()
    flgG()
    flgH()
    flgI()
    flgK()
    flgL()
    flhA()
    flhB()
    flhC()
    flhD()
    fliD()
    fliE()
    fliF()
    fliG()
    fliH()
    fliI()
    fliJ()
    fliL()
    fliM()
    fliN()
    fliO()
    fliP()
    fliQ()
    fliR()
    motA()
    motB()
    flagellar_export_apparatus()
    flagellar_export_apparatus_subunit()
    flagellar_hook()
    flagellar_motor()
    flagellar_motor_switch()
    Growing_flhDC(flhC~0~1~2,flhD~0~1~2~3~4)
    Growing_flagellar_motor_switch(fliF~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26~27~28~29~30~31~32~33~34,fliG~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26~27~28~29~30~31~32~33~34,fliM~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26~27~28~29~30~31~32~33~34,fliN~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26~27~28~29~30~31~32~33~34~35~36~37~38~39~40~41~42~43~44~45~46~47~48~49~50~51~52~53~54~55~56~57~58~59~60~61~62~63~64~65~66~67~68~69~70~71~72~73~74~75~76~77~78~79~80~81~82~83~84~85~86~87~88~89~90~91~92~93~94~95~96~97~98~99~100~101~102~103~104~105~106~107~108~109~110~111)
    Growing_flagellar_export_apparatus_subunit(flagellar_motor_switch~0~1,flhA~0~1~2~3~4~5~6~7~8~9,flhB~0~1,fliI~0~1~2~3~4~5~6,fliJ~0~1,fliO~0~1,fliP~0~1~2~3~4~5,fliQ~0~1~2~3~4,fliR~0~1)
    Growing_flagellar_export_apparatus(flagellar_export_apparatus_subunit~0~1,fliH~0~1~2~3~4~5~6~7~8~9~10~11~12)
    Growing_flagellar_motor(flagellar_export_apparatus~0~1,flgB~0~1~2~3~4~5,flgC~0~1~2~3~4~5~6,flgF~0~1~2~3~4~5,flgG~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24,flgH~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26,flgI~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26,fliE~0~1~2~3~4~5~6,fliL~0~1~2,motA~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26~27~28~29~30~31~32~33~34~35~36~37~38~39~40~41~42~43~44~45~46~47~48~49~50~51~52~53~54~55,motB~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22)
    Growing_flagellar_hook(flgE~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26~27~28~29~30~31~32~33~34~35~36~37~38~39~40~41~42~43~44~45~46~47~48~49~50~51~52~53~54~55~56~57~58~59~60~61~62~63~64~65~66~67~68~69~70~71~72~73~74~75~76~77~78~79~80~81~82~83~84~85~86~87~88~89~90~91~92~93~94~95~96~97~98~99~100~101~102~103~104~105~106~107~108~109~110~111~112~113~114~115~116~117~118~119~120)
    Growing_flagella(flagellar_hook~0~1,flagellar_motor~0~1,flgK~0~1~2~3~4~5~6~7~8~9~10~11,flgL~0~1~2~3~4~5~6~7~8~9~10~11,fliD~0~1~2~3~4~5)
    flagella()
    flhDC()
end molecule types

begin seed species
    flgB()  flgB_0
    flgC()  flgC_0
    flgE()  flgE_0
    flgF()  flgF_0
    flgG()  flgG_0
    flgH()  flgH_0
    flgI()  flgI_0
    flgK()  flgK_0
    flgL()  flgL_0
    flhA()  flhA_0
    flhB()  flhB_0
    flhC()  flhC_0
    flhD()  flhD_0
    fliD()  fliD_0
    fliE()  fliE_0
    fliF()  fliF_0
    fliG()  fliG_0
    fliH()  fliH_0
    fliI()  fliI_0
    fliJ()  fliJ_0
    fliL()  fliL_0
    fliM()  fliM_0
    fliN()  fliN_0
    fliO()  fliO_0
    fliP()  fliP_0
    fliQ()  fliQ_0
    fliR()  fliR_0
    motA()  motA_0
    motB()  motB_0
end seed species

begin observables
    Molecules  Free_flgB  flgB()
    Molecules  Free_flgC  flgC()
    Molecules  Free_flgE  flgE()
    Molecules  Free_flgF  flgF()
    Molecules  Free_flgG  flgG()
    Molecules  Free_flgH  flgH()
    Molecules  Free_flgI  flgI()
    Molecules  Free_flgK  flgK()
    Molecules  Free_flgL  flgL()
    Molecules  Free_flhA  flhA()
    Molecules  Free_flhB  flhB()
    Molecules  Free_flhC  flhC()
    Molecules  Free_flhD  flhD()
    Molecules  Free_fliD  fliD()
    Molecules  Free_fliE  fliE()
    Molecules  Free_fliF  fliF()
    Molecules  Free_fliG  fliG()
    Molecules  Free_fliH  fliH()
    Molecules  Free_fliI  fliI()
    Molecules  Free_fliJ  fliJ()
    Molecules  Free_fliL  fliL()
    Molecules  Free_fliM  fliM()
    Molecules  Free_fliN  fliN()
    Molecules  Free_fliO  fliO()
    Molecules  Free_fliP  fliP()
    Molecules  Free_fliQ  fliQ()
    Molecules  Free_fliR  fliR()
    Molecules  Free_motA  motA()
    Molecules  Free_motB  motB()
    Molecules  flhDC  flhDC()
    Molecules  flagellar_motor_switch  flagellar_motor_switch()
    Molecules  flagellar_export_apparatus_subunit  flagellar_export_apparatus_subunit()
    Molecules  flagellar_export_apparatus  flagellar_export_apparatus()
    Molecules  flagellar_motor  flagellar_motor()
    Molecules  flagellar_hook  flagellar_hook()
    Molecules  flagella  flagella()
    Molecules  Growing_flhDC_total  Growing_flhDC()
    Molecules  Growing_flagellar_motor_switch_total  Growing_flagellar_motor_switch()
    Molecules  Growing_flagellar_export_apparatus_subunit_total  Growing_flagellar_export_apparatus_subunit()
    Molecules  Growing_flagellar_export_apparatus_total  Growing_flagellar_export_apparatus()
    Molecules  Growing_flagellar_motor_total  Growing_flagellar_motor()
    Molecules  Growing_flagellar_hook_total  Growing_flagellar_hook()
    Molecules  Growing_flagella_total  Growing_flagella()
end observables

begin reaction rules

    # === flhDC ===
    # Product: flhDC
    # Subunits: 4x flhD, 2x flhC
    # Nucleation (rate scaled by 1/total_subunits)
    flhC() + flhC() -> Growing_flhDC(flhC~2,flhD~0)  k_nuc_flhDC
    Growing_flhDC(flhD~0) + flhD() -> Growing_flhDC(flhD~1)  k_bind
    Growing_flhDC(flhD~1) + flhD() -> Growing_flhDC(flhD~2)  k_bind
    Growing_flhDC(flhD~2) + flhD() -> Growing_flhDC(flhD~3)  k_bind
    Growing_flhDC(flhD~3) + flhD() -> Growing_flhDC(flhD~4)  k_bind
    # Completion
    Growing_flhDC(flhC~2,flhD~4) -> flhDC()  k_completion

    # === flagellar motor switch reaction ===
    # Product: flagellar motor switch
    # Subunits: 34x fliF, 34x fliG, 34x fliM, 111x fliN
    # Nucleation (rate scaled by 1/total_subunits)
    fliF() + fliF() -> Growing_flagellar_motor_switch(fliF~2,fliG~0,fliM~0,fliN~0)  k_nuc_flagellar_motor_switch
    Growing_flagellar_motor_switch(fliF~2) + fliF() -> Growing_flagellar_motor_switch(fliF~3)  k_bind
    Growing_flagellar_motor_switch(fliF~3) + fliF() -> Growing_flagellar_motor_switch(fliF~4)  k_bind
    Growing_flagellar_motor_switch(fliF~4) + fliF() -> Growing_flagellar_motor_switch(fliF~5)  k_bind
    Growing_flagellar_motor_switch(fliF~5) + fliF() -> Growing_flagellar_motor_switch(fliF~6)  k_bind
    Growing_flagellar_motor_switch(fliF~6) + fliF() -> Growing_flagellar_motor_switch(fliF~7)  k_bind
    Growing_flagellar_motor_switch(fliF~7) + fliF() -> Growing_flagellar_motor_switch(fliF~8)  k_bind
    Growing_flagellar_motor_switch(fliF~8) + fliF() -> Growing_flagellar_motor_switch(fliF~9)  k_bind
    Growing_flagellar_motor_switch(fliF~9) + fliF() -> Growing_flagellar_motor_switch(fliF~10)  k_bind
    Growing_flagellar_motor_switch(fliF~10) + fliF() -> Growing_flagellar_motor_switch(fliF~11)  k_bind
    Growing_flagellar_motor_switch(fliF~11) + fliF() -> Growing_flagellar_motor_switch(fliF~12)  k_bind
    Growing_flagellar_motor_switch(fliF~12) + fliF() -> Growing_flagellar_motor_switch(fliF~13)  k_bind
    Growing_flagellar_motor_switch(fliF~13) + fliF() -> Growing_flagellar_motor_switch(fliF~14)  k_bind
    Growing_flagellar_motor_switch(fliF~14) + fliF() -> Growing_flagellar_motor_switch(fliF~15)  k_bind
    Growing_flagellar_motor_switch(fliF~15) + fliF() -> Growing_flagellar_motor_switch(fliF~16)  k_bind
    Growing_flagellar_motor_switch(fliF~16) + fliF() -> Growing_flagellar_motor_switch(fliF~17)  k_bind
    Growing_flagellar_motor_switch(fliF~17) + fliF() -> Growing_flagellar_motor_switch(fliF~18)  k_bind
    Growing_flagellar_motor_switch(fliF~18) + fliF() -> Growing_flagellar_motor_switch(fliF~19)  k_bind
    Growing_flagellar_motor_switch(fliF~19) + fliF() -> Growing_flagellar_motor_switch(fliF~20)  k_bind
    Growing_flagellar_motor_switch(fliF~20) + fliF() -> Growing_flagellar_motor_switch(fliF~21)  k_bind
    Growing_flagellar_motor_switch(fliF~21) + fliF() -> Growing_flagellar_motor_switch(fliF~22)  k_bind
    Growing_flagellar_motor_switch(fliF~22) + fliF() -> Growing_flagellar_motor_switch(fliF~23)  k_bind
    Growing_flagellar_motor_switch(fliF~23) + fliF() -> Growing_flagellar_motor_switch(fliF~24)  k_bind
    Growing_flagellar_motor_switch(fliF~24) + fliF() -> Growing_flagellar_motor_switch(fliF~25)  k_bind
    Growing_flagellar_motor_switch(fliF~25) + fliF() -> Growing_flagellar_motor_switch(fliF~26)  k_bind
    Growing_flagellar_motor_switch(fliF~26) + fliF() -> Growing_flagellar_motor_switch(fliF~27)  k_bind
    Growing_flagellar_motor_switch(fliF~27) + fliF() -> Growing_flagellar_motor_switch(fliF~28)  k_bind
    Growing_flagellar_motor_switch(fliF~28) + fliF() -> Growing_flagellar_motor_switch(fliF~29)  k_bind
    Growing_flagellar_motor_switch(fliF~29) + fliF() -> Growing_flagellar_motor_switch(fliF~30)  k_bind
    Growing_flagellar_motor_switch(fliF~30) + fliF() -> Growing_flagellar_motor_switch(fliF~31)  k_bind
    Growing_flagellar_motor_switch(fliF~31) + fliF() -> Growing_flagellar_motor_switch(fliF~32)  k_bind
    Growing_flagellar_motor_switch(fliF~32) + fliF() -> Growing_flagellar_motor_switch(fliF~33)  k_bind
    Growing_flagellar_motor_switch(fliF~33) + fliF() -> Growing_flagellar_motor_switch(fliF~34)  k_bind
    Growing_flagellar_motor_switch(fliG~0) + fliG() -> Growing_flagellar_motor_switch(fliG~1)  k_bind
    Growing_flagellar_motor_switch(fliG~1) + fliG() -> Growing_flagellar_motor_switch(fliG~2)  k_bind
    Growing_flagellar_motor_switch(fliG~2) + fliG() -> Growing_flagellar_motor_switch(fliG~3)  k_bind
    Growing_flagellar_motor_switch(fliG~3) + fliG() -> Growing_flagellar_motor_switch(fliG~4)  k_bind
    Growing_flagellar_motor_switch(fliG~4) + fliG() -> Growing_flagellar_motor_switch(fliG~5)  k_bind
    Growing_flagellar_motor_switch(fliG~5) + fliG() -> Growing_flagellar_motor_switch(fliG~6)  k_bind
    Growing_flagellar_motor_switch(fliG~6) + fliG() -> Growing_flagellar_motor_switch(fliG~7)  k_bind
    Growing_flagellar_motor_switch(fliG~7) + fliG() -> Growing_flagellar_motor_switch(fliG~8)  k_bind
    Growing_flagellar_motor_switch(fliG~8) + fliG() -> Growing_flagellar_motor_switch(fliG~9)  k_bind
    Growing_flagellar_motor_switch(fliG~9) + fliG() -> Growing_flagellar_motor_switch(fliG~10)  k_bind
    Growing_flagellar_motor_switch(fliG~10) + fliG() -> Growing_flagellar_motor_switch(fliG~11)  k_bind
    Growing_flagellar_motor_switch(fliG~11) + fliG() -> Growing_flagellar_motor_switch(fliG~12)  k_bind
    Growing_flagellar_motor_switch(fliG~12) + fliG() -> Growing_flagellar_motor_switch(fliG~13)  k_bind
    Growing_flagellar_motor_switch(fliG~13) + fliG() -> Growing_flagellar_motor_switch(fliG~14)  k_bind
    Growing_flagellar_motor_switch(fliG~14) + fliG() -> Growing_flagellar_motor_switch(fliG~15)  k_bind
    Growing_flagellar_motor_switch(fliG~15) + fliG() -> Growing_flagellar_motor_switch(fliG~16)  k_bind
    Growing_flagellar_motor_switch(fliG~16) + fliG() -> Growing_flagellar_motor_switch(fliG~17)  k_bind
    Growing_flagellar_motor_switch(fliG~17) + fliG() -> Growing_flagellar_motor_switch(fliG~18)  k_bind
    Growing_flagellar_motor_switch(fliG~18) + fliG() -> Growing_flagellar_motor_switch(fliG~19)  k_bind
    Growing_flagellar_motor_switch(fliG~19) + fliG() -> Growing_flagellar_motor_switch(fliG~20)  k_bind
    Growing_flagellar_motor_switch(fliG~20) + fliG() -> Growing_flagellar_motor_switch(fliG~21)  k_bind
    Growing_flagellar_motor_switch(fliG~21) + fliG() -> Growing_flagellar_motor_switch(fliG~22)  k_bind
    Growing_flagellar_motor_switch(fliG~22) + fliG() -> Growing_flagellar_motor_switch(fliG~23)  k_bind
    Growing_flagellar_motor_switch(fliG~23) + fliG() -> Growing_flagellar_motor_switch(fliG~24)  k_bind
    Growing_flagellar_motor_switch(fliG~24) + fliG() -> Growing_flagellar_motor_switch(fliG~25)  k_bind
    Growing_flagellar_motor_switch(fliG~25) + fliG() -> Growing_flagellar_motor_switch(fliG~26)  k_bind
    Growing_flagellar_motor_switch(fliG~26) + fliG() -> Growing_flagellar_motor_switch(fliG~27)  k_bind
    Growing_flagellar_motor_switch(fliG~27) + fliG() -> Growing_flagellar_motor_switch(fliG~28)  k_bind
    Growing_flagellar_motor_switch(fliG~28) + fliG() -> Growing_flagellar_motor_switch(fliG~29)  k_bind
    Growing_flagellar_motor_switch(fliG~29) + fliG() -> Growing_flagellar_motor_switch(fliG~30)  k_bind
    Growing_flagellar_motor_switch(fliG~30) + fliG() -> Growing_flagellar_motor_switch(fliG~31)  k_bind
    Growing_flagellar_motor_switch(fliG~31) + fliG() -> Growing_flagellar_motor_switch(fliG~32)  k_bind
    Growing_flagellar_motor_switch(fliG~32) + fliG() -> Growing_flagellar_motor_switch(fliG~33)  k_bind
    Growing_flagellar_motor_switch(fliG~33) + fliG() -> Growing_flagellar_motor_switch(fliG~34)  k_bind
    Growing_flagellar_motor_switch(fliM~0) + fliM() -> Growing_flagellar_motor_switch(fliM~1)  k_bind
    Growing_flagellar_motor_switch(fliM~1) + fliM() -> Growing_flagellar_motor_switch(fliM~2)  k_bind
    Growing_flagellar_motor_switch(fliM~2) + fliM() -> Growing_flagellar_motor_switch(fliM~3)  k_bind
    Growing_flagellar_motor_switch(fliM~3) + fliM() -> Growing_flagellar_motor_switch(fliM~4)  k_bind
    Growing_flagellar_motor_switch(fliM~4) + fliM() -> Growing_flagellar_motor_switch(fliM~5)  k_bind
    Growing_flagellar_motor_switch(fliM~5) + fliM() -> Growing_flagellar_motor_switch(fliM~6)  k_bind
    Growing_flagellar_motor_switch(fliM~6) + fliM() -> Growing_flagellar_motor_switch(fliM~7)  k_bind
    Growing_flagellar_motor_switch(fliM~7) + fliM() -> Growing_flagellar_motor_switch(fliM~8)  k_bind
    Growing_flagellar_motor_switch(fliM~8) + fliM() -> Growing_flagellar_motor_switch(fliM~9)  k_bind
    Growing_flagellar_motor_switch(fliM~9) + fliM() -> Growing_flagellar_motor_switch(fliM~10)  k_bind
    Growing_flagellar_motor_switch(fliM~10) + fliM() -> Growing_flagellar_motor_switch(fliM~11)  k_bind
    Growing_flagellar_motor_switch(fliM~11) + fliM() -> Growing_flagellar_motor_switch(fliM~12)  k_bind
    Growing_flagellar_motor_switch(fliM~12) + fliM() -> Growing_flagellar_motor_switch(fliM~13)  k_bind
    Growing_flagellar_motor_switch(fliM~13) + fliM() -> Growing_flagellar_motor_switch(fliM~14)  k_bind
    Growing_flagellar_motor_switch(fliM~14) + fliM() -> Growing_flagellar_motor_switch(fliM~15)  k_bind
    Growing_flagellar_motor_switch(fliM~15) + fliM() -> Growing_flagellar_motor_switch(fliM~16)  k_bind
    Growing_flagellar_motor_switch(fliM~16) + fliM() -> Growing_flagellar_motor_switch(fliM~17)  k_bind
    Growing_flagellar_motor_switch(fliM~17) + fliM() -> Growing_flagellar_motor_switch(fliM~18)  k_bind
    Growing_flagellar_motor_switch(fliM~18) + fliM() -> Growing_flagellar_motor_switch(fliM~19)  k_bind
    Growing_flagellar_motor_switch(fliM~19) + fliM() -> Growing_flagellar_motor_switch(fliM~20)  k_bind
    Growing_flagellar_motor_switch(fliM~20) + fliM() -> Growing_flagellar_motor_switch(fliM~21)  k_bind
    Growing_flagellar_motor_switch(fliM~21) + fliM() -> Growing_flagellar_motor_switch(fliM~22)  k_bind
    Growing_flagellar_motor_switch(fliM~22) + fliM() -> Growing_flagellar_motor_switch(fliM~23)  k_bind
    Growing_flagellar_motor_switch(fliM~23) + fliM() -> Growing_flagellar_motor_switch(fliM~24)  k_bind
    Growing_flagellar_motor_switch(fliM~24) + fliM() -> Growing_flagellar_motor_switch(fliM~25)  k_bind
    Growing_flagellar_motor_switch(fliM~25) + fliM() -> Growing_flagellar_motor_switch(fliM~26)  k_bind
    Growing_flagellar_motor_switch(fliM~26) + fliM() -> Growing_flagellar_motor_switch(fliM~27)  k_bind
    Growing_flagellar_motor_switch(fliM~27) + fliM() -> Growing_flagellar_motor_switch(fliM~28)  k_bind
    Growing_flagellar_motor_switch(fliM~28) + fliM() -> Growing_flagellar_motor_switch(fliM~29)  k_bind
    Growing_flagellar_motor_switch(fliM~29) + fliM() -> Growing_flagellar_motor_switch(fliM~30)  k_bind
    Growing_flagellar_motor_switch(fliM~30) + fliM() -> Growing_flagellar_motor_switch(fliM~31)  k_bind
    Growing_flagellar_motor_switch(fliM~31) + fliM() -> Growing_flagellar_motor_switch(fliM~32)  k_bind
    Growing_flagellar_motor_switch(fliM~32) + fliM() -> Growing_flagellar_motor_switch(fliM~33)  k_bind
    Growing_flagellar_motor_switch(fliM~33) + fliM() -> Growing_flagellar_motor_switch(fliM~34)  k_bind
    Growing_flagellar_motor_switch(fliN~0) + fliN() -> Growing_flagellar_motor_switch(fliN~1)  k_bind
    Growing_flagellar_motor_switch(fliN~1) + fliN() -> Growing_flagellar_motor_switch(fliN~2)  k_bind
    Growing_flagellar_motor_switch(fliN~2) + fliN() -> Growing_flagellar_motor_switch(fliN~3)  k_bind
    Growing_flagellar_motor_switch(fliN~3) + fliN() -> Growing_flagellar_motor_switch(fliN~4)  k_bind
    Growing_flagellar_motor_switch(fliN~4) + fliN() -> Growing_flagellar_motor_switch(fliN~5)  k_bind
    Growing_flagellar_motor_switch(fliN~5) + fliN() -> Growing_flagellar_motor_switch(fliN~6)  k_bind
    Growing_flagellar_motor_switch(fliN~6) + fliN() -> Growing_flagellar_motor_switch(fliN~7)  k_bind
    Growing_flagellar_motor_switch(fliN~7) + fliN() -> Growing_flagellar_motor_switch(fliN~8)  k_bind
    Growing_flagellar_motor_switch(fliN~8) + fliN() -> Growing_flagellar_motor_switch(fliN~9)  k_bind
    Growing_flagellar_motor_switch(fliN~9) + fliN() -> Growing_flagellar_motor_switch(fliN~10)  k_bind
    Growing_flagellar_motor_switch(fliN~10) + fliN() -> Growing_flagellar_motor_switch(fliN~11)  k_bind
    Growing_flagellar_motor_switch(fliN~11) + fliN() -> Growing_flagellar_motor_switch(fliN~12)  k_bind
    Growing_flagellar_motor_switch(fliN~12) + fliN() -> Growing_flagellar_motor_switch(fliN~13)  k_bind
    Growing_flagellar_motor_switch(fliN~13) + fliN() -> Growing_flagellar_motor_switch(fliN~14)  k_bind
    Growing_flagellar_motor_switch(fliN~14) + fliN() -> Growing_flagellar_motor_switch(fliN~15)  k_bind
    Growing_flagellar_motor_switch(fliN~15) + fliN() -> Growing_flagellar_motor_switch(fliN~16)  k_bind
    Growing_flagellar_motor_switch(fliN~16) + fliN() -> Growing_flagellar_motor_switch(fliN~17)  k_bind
    Growing_flagellar_motor_switch(fliN~17) + fliN() -> Growing_flagellar_motor_switch(fliN~18)  k_bind
    Growing_flagellar_motor_switch(fliN~18) + fliN() -> Growing_flagellar_motor_switch(fliN~19)  k_bind
    Growing_flagellar_motor_switch(fliN~19) + fliN() -> Growing_flagellar_motor_switch(fliN~20)  k_bind
    Growing_flagellar_motor_switch(fliN~20) + fliN() -> Growing_flagellar_motor_switch(fliN~21)  k_bind
    Growing_flagellar_motor_switch(fliN~21) + fliN() -> Growing_flagellar_motor_switch(fliN~22)  k_bind
    Growing_flagellar_motor_switch(fliN~22) + fliN() -> Growing_flagellar_motor_switch(fliN~23)  k_bind
    Growing_flagellar_motor_switch(fliN~23) + fliN() -> Growing_flagellar_motor_switch(fliN~24)  k_bind
    Growing_flagellar_motor_switch(fliN~24) + fliN() -> Growing_flagellar_motor_switch(fliN~25)  k_bind
    Growing_flagellar_motor_switch(fliN~25) + fliN() -> Growing_flagellar_motor_switch(fliN~26)  k_bind
    Growing_flagellar_motor_switch(fliN~26) + fliN() -> Growing_flagellar_motor_switch(fliN~27)  k_bind
    Growing_flagellar_motor_switch(fliN~27) + fliN() -> Growing_flagellar_motor_switch(fliN~28)  k_bind
    Growing_flagellar_motor_switch(fliN~28) + fliN() -> Growing_flagellar_motor_switch(fliN~29)  k_bind
    Growing_flagellar_motor_switch(fliN~29) + fliN() -> Growing_flagellar_motor_switch(fliN~30)  k_bind
    Growing_flagellar_motor_switch(fliN~30) + fliN() -> Growing_flagellar_motor_switch(fliN~31)  k_bind
    Growing_flagellar_motor_switch(fliN~31) + fliN() -> Growing_flagellar_motor_switch(fliN~32)  k_bind
    Growing_flagellar_motor_switch(fliN~32) + fliN() -> Growing_flagellar_motor_switch(fliN~33)  k_bind
    Growing_flagellar_motor_switch(fliN~33) + fliN() -> Growing_flagellar_motor_switch(fliN~34)  k_bind
    Growing_flagellar_motor_switch(fliN~34) + fliN() -> Growing_flagellar_motor_switch(fliN~35)  k_bind
    Growing_flagellar_motor_switch(fliN~35) + fliN() -> Growing_flagellar_motor_switch(fliN~36)  k_bind
    Growing_flagellar_motor_switch(fliN~36) + fliN() -> Growing_flagellar_motor_switch(fliN~37)  k_bind
    Growing_flagellar_motor_switch(fliN~37) + fliN() -> Growing_flagellar_motor_switch(fliN~38)  k_bind
    Growing_flagellar_motor_switch(fliN~38) + fliN() -> Growing_flagellar_motor_switch(fliN~39)  k_bind
    Growing_flagellar_motor_switch(fliN~39) + fliN() -> Growing_flagellar_motor_switch(fliN~40)  k_bind
    Growing_flagellar_motor_switch(fliN~40) + fliN() -> Growing_flagellar_motor_switch(fliN~41)  k_bind
    Growing_flagellar_motor_switch(fliN~41) + fliN() -> Growing_flagellar_motor_switch(fliN~42)  k_bind
    Growing_flagellar_motor_switch(fliN~42) + fliN() -> Growing_flagellar_motor_switch(fliN~43)  k_bind
    Growing_flagellar_motor_switch(fliN~43) + fliN() -> Growing_flagellar_motor_switch(fliN~44)  k_bind
    Growing_flagellar_motor_switch(fliN~44) + fliN() -> Growing_flagellar_motor_switch(fliN~45)  k_bind
    Growing_flagellar_motor_switch(fliN~45) + fliN() -> Growing_flagellar_motor_switch(fliN~46)  k_bind
    Growing_flagellar_motor_switch(fliN~46) + fliN() -> Growing_flagellar_motor_switch(fliN~47)  k_bind
    Growing_flagellar_motor_switch(fliN~47) + fliN() -> Growing_flagellar_motor_switch(fliN~48)  k_bind
    Growing_flagellar_motor_switch(fliN~48) + fliN() -> Growing_flagellar_motor_switch(fliN~49)  k_bind
    Growing_flagellar_motor_switch(fliN~49) + fliN() -> Growing_flagellar_motor_switch(fliN~50)  k_bind
    Growing_flagellar_motor_switch(fliN~50) + fliN() -> Growing_flagellar_motor_switch(fliN~51)  k_bind
    Growing_flagellar_motor_switch(fliN~51) + fliN() -> Growing_flagellar_motor_switch(fliN~52)  k_bind
    Growing_flagellar_motor_switch(fliN~52) + fliN() -> Growing_flagellar_motor_switch(fliN~53)  k_bind
    Growing_flagellar_motor_switch(fliN~53) + fliN() -> Growing_flagellar_motor_switch(fliN~54)  k_bind
    Growing_flagellar_motor_switch(fliN~54) + fliN() -> Growing_flagellar_motor_switch(fliN~55)  k_bind
    Growing_flagellar_motor_switch(fliN~55) + fliN() -> Growing_flagellar_motor_switch(fliN~56)  k_bind
    Growing_flagellar_motor_switch(fliN~56) + fliN() -> Growing_flagellar_motor_switch(fliN~57)  k_bind
    Growing_flagellar_motor_switch(fliN~57) + fliN() -> Growing_flagellar_motor_switch(fliN~58)  k_bind
    Growing_flagellar_motor_switch(fliN~58) + fliN() -> Growing_flagellar_motor_switch(fliN~59)  k_bind
    Growing_flagellar_motor_switch(fliN~59) + fliN() -> Growing_flagellar_motor_switch(fliN~60)  k_bind
    Growing_flagellar_motor_switch(fliN~60) + fliN() -> Growing_flagellar_motor_switch(fliN~61)  k_bind
    Growing_flagellar_motor_switch(fliN~61) + fliN() -> Growing_flagellar_motor_switch(fliN~62)  k_bind
    Growing_flagellar_motor_switch(fliN~62) + fliN() -> Growing_flagellar_motor_switch(fliN~63)  k_bind
    Growing_flagellar_motor_switch(fliN~63) + fliN() -> Growing_flagellar_motor_switch(fliN~64)  k_bind
    Growing_flagellar_motor_switch(fliN~64) + fliN() -> Growing_flagellar_motor_switch(fliN~65)  k_bind
    Growing_flagellar_motor_switch(fliN~65) + fliN() -> Growing_flagellar_motor_switch(fliN~66)  k_bind
    Growing_flagellar_motor_switch(fliN~66) + fliN() -> Growing_flagellar_motor_switch(fliN~67)  k_bind
    Growing_flagellar_motor_switch(fliN~67) + fliN() -> Growing_flagellar_motor_switch(fliN~68)  k_bind
    Growing_flagellar_motor_switch(fliN~68) + fliN() -> Growing_flagellar_motor_switch(fliN~69)  k_bind
    Growing_flagellar_motor_switch(fliN~69) + fliN() -> Growing_flagellar_motor_switch(fliN~70)  k_bind
    Growing_flagellar_motor_switch(fliN~70) + fliN() -> Growing_flagellar_motor_switch(fliN~71)  k_bind
    Growing_flagellar_motor_switch(fliN~71) + fliN() -> Growing_flagellar_motor_switch(fliN~72)  k_bind
    Growing_flagellar_motor_switch(fliN~72) + fliN() -> Growing_flagellar_motor_switch(fliN~73)  k_bind
    Growing_flagellar_motor_switch(fliN~73) + fliN() -> Growing_flagellar_motor_switch(fliN~74)  k_bind
    Growing_flagellar_motor_switch(fliN~74) + fliN() -> Growing_flagellar_motor_switch(fliN~75)  k_bind
    Growing_flagellar_motor_switch(fliN~75) + fliN() -> Growing_flagellar_motor_switch(fliN~76)  k_bind
    Growing_flagellar_motor_switch(fliN~76) + fliN() -> Growing_flagellar_motor_switch(fliN~77)  k_bind
    Growing_flagellar_motor_switch(fliN~77) + fliN() -> Growing_flagellar_motor_switch(fliN~78)  k_bind
    Growing_flagellar_motor_switch(fliN~78) + fliN() -> Growing_flagellar_motor_switch(fliN~79)  k_bind
    Growing_flagellar_motor_switch(fliN~79) + fliN() -> Growing_flagellar_motor_switch(fliN~80)  k_bind
    Growing_flagellar_motor_switch(fliN~80) + fliN() -> Growing_flagellar_motor_switch(fliN~81)  k_bind
    Growing_flagellar_motor_switch(fliN~81) + fliN() -> Growing_flagellar_motor_switch(fliN~82)  k_bind
    Growing_flagellar_motor_switch(fliN~82) + fliN() -> Growing_flagellar_motor_switch(fliN~83)  k_bind
    Growing_flagellar_motor_switch(fliN~83) + fliN() -> Growing_flagellar_motor_switch(fliN~84)  k_bind
    Growing_flagellar_motor_switch(fliN~84) + fliN() -> Growing_flagellar_motor_switch(fliN~85)  k_bind
    Growing_flagellar_motor_switch(fliN~85) + fliN() -> Growing_flagellar_motor_switch(fliN~86)  k_bind
    Growing_flagellar_motor_switch(fliN~86) + fliN() -> Growing_flagellar_motor_switch(fliN~87)  k_bind
    Growing_flagellar_motor_switch(fliN~87) + fliN() -> Growing_flagellar_motor_switch(fliN~88)  k_bind
    Growing_flagellar_motor_switch(fliN~88) + fliN() -> Growing_flagellar_motor_switch(fliN~89)  k_bind
    Growing_flagellar_motor_switch(fliN~89) + fliN() -> Growing_flagellar_motor_switch(fliN~90)  k_bind
    Growing_flagellar_motor_switch(fliN~90) + fliN() -> Growing_flagellar_motor_switch(fliN~91)  k_bind
    Growing_flagellar_motor_switch(fliN~91) + fliN() -> Growing_flagellar_motor_switch(fliN~92)  k_bind
    Growing_flagellar_motor_switch(fliN~92) + fliN() -> Growing_flagellar_motor_switch(fliN~93)  k_bind
    Growing_flagellar_motor_switch(fliN~93) + fliN() -> Growing_flagellar_motor_switch(fliN~94)  k_bind
    Growing_flagellar_motor_switch(fliN~94) + fliN() -> Growing_flagellar_motor_switch(fliN~95)  k_bind
    Growing_flagellar_motor_switch(fliN~95) + fliN() -> Growing_flagellar_motor_switch(fliN~96)  k_bind
    Growing_flagellar_motor_switch(fliN~96) + fliN() -> Growing_flagellar_motor_switch(fliN~97)  k_bind
    Growing_flagellar_motor_switch(fliN~97) + fliN() -> Growing_flagellar_motor_switch(fliN~98)  k_bind
    Growing_flagellar_motor_switch(fliN~98) + fliN() -> Growing_flagellar_motor_switch(fliN~99)  k_bind
    Growing_flagellar_motor_switch(fliN~99) + fliN() -> Growing_flagellar_motor_switch(fliN~100)  k_bind
    Growing_flagellar_motor_switch(fliN~100) + fliN() -> Growing_flagellar_motor_switch(fliN~101)  k_bind
    Growing_flagellar_motor_switch(fliN~101) + fliN() -> Growing_flagellar_motor_switch(fliN~102)  k_bind
    Growing_flagellar_motor_switch(fliN~102) + fliN() -> Growing_flagellar_motor_switch(fliN~103)  k_bind
    Growing_flagellar_motor_switch(fliN~103) + fliN() -> Growing_flagellar_motor_switch(fliN~104)  k_bind
    Growing_flagellar_motor_switch(fliN~104) + fliN() -> Growing_flagellar_motor_switch(fliN~105)  k_bind
    Growing_flagellar_motor_switch(fliN~105) + fliN() -> Growing_flagellar_motor_switch(fliN~106)  k_bind
    Growing_flagellar_motor_switch(fliN~106) + fliN() -> Growing_flagellar_motor_switch(fliN~107)  k_bind
    Growing_flagellar_motor_switch(fliN~107) + fliN() -> Growing_flagellar_motor_switch(fliN~108)  k_bind
    Growing_flagellar_motor_switch(fliN~108) + fliN() -> Growing_flagellar_motor_switch(fliN~109)  k_bind
    Growing_flagellar_motor_switch(fliN~109) + fliN() -> Growing_flagellar_motor_switch(fliN~110)  k_bind
    Growing_flagellar_motor_switch(fliN~110) + fliN() -> Growing_flagellar_motor_switch(fliN~111)  k_bind
    # Completion
    Growing_flagellar_motor_switch(fliF~34,fliG~34,fliM~34,fliN~111) -> flagellar_motor_switch()  k_completion

    # === flagellar export apparatus reaction 1 ===
    # Product: flagellar export apparatus subunit
    # Subunits: 1x flagellar motor switch, 9x flhA, 1x flhB, 1x fliO, 5x fliP, 4x fliQ, 1x fliR, 1x fliJ, 6x fliI
    # Nucleation (rate scaled by 1/total_subunits)
    flagellar_motor_switch() + flhB() -> Growing_flagellar_export_apparatus_subunit(flagellar_motor_switch~1,flhA~0,flhB~1,fliI~0,fliJ~0,fliO~0,fliP~0,fliQ~0,fliR~0)  k_nuc_flagellar_export_apparatus_subunit
    Growing_flagellar_export_apparatus_subunit(flhA~0) + flhA() -> Growing_flagellar_export_apparatus_subunit(flhA~1)  k_bind
    Growing_flagellar_export_apparatus_subunit(flhA~1) + flhA() -> Growing_flagellar_export_apparatus_subunit(flhA~2)  k_bind
    Growing_flagellar_export_apparatus_subunit(flhA~2) + flhA() -> Growing_flagellar_export_apparatus_subunit(flhA~3)  k_bind
    Growing_flagellar_export_apparatus_subunit(flhA~3) + flhA() -> Growing_flagellar_export_apparatus_subunit(flhA~4)  k_bind
    Growing_flagellar_export_apparatus_subunit(flhA~4) + flhA() -> Growing_flagellar_export_apparatus_subunit(flhA~5)  k_bind
    Growing_flagellar_export_apparatus_subunit(flhA~5) + flhA() -> Growing_flagellar_export_apparatus_subunit(flhA~6)  k_bind
    Growing_flagellar_export_apparatus_subunit(flhA~6) + flhA() -> Growing_flagellar_export_apparatus_subunit(flhA~7)  k_bind
    Growing_flagellar_export_apparatus_subunit(flhA~7) + flhA() -> Growing_flagellar_export_apparatus_subunit(flhA~8)  k_bind
    Growing_flagellar_export_apparatus_subunit(flhA~8) + flhA() -> Growing_flagellar_export_apparatus_subunit(flhA~9)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliI~0) + fliI() -> Growing_flagellar_export_apparatus_subunit(fliI~1)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliI~1) + fliI() -> Growing_flagellar_export_apparatus_subunit(fliI~2)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliI~2) + fliI() -> Growing_flagellar_export_apparatus_subunit(fliI~3)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliI~3) + fliI() -> Growing_flagellar_export_apparatus_subunit(fliI~4)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliI~4) + fliI() -> Growing_flagellar_export_apparatus_subunit(fliI~5)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliI~5) + fliI() -> Growing_flagellar_export_apparatus_subunit(fliI~6)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliJ~0) + fliJ() -> Growing_flagellar_export_apparatus_subunit(fliJ~1)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliO~0) + fliO() -> Growing_flagellar_export_apparatus_subunit(fliO~1)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliP~0) + fliP() -> Growing_flagellar_export_apparatus_subunit(fliP~1)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliP~1) + fliP() -> Growing_flagellar_export_apparatus_subunit(fliP~2)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliP~2) + fliP() -> Growing_flagellar_export_apparatus_subunit(fliP~3)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliP~3) + fliP() -> Growing_flagellar_export_apparatus_subunit(fliP~4)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliP~4) + fliP() -> Growing_flagellar_export_apparatus_subunit(fliP~5)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliQ~0) + fliQ() -> Growing_flagellar_export_apparatus_subunit(fliQ~1)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliQ~1) + fliQ() -> Growing_flagellar_export_apparatus_subunit(fliQ~2)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliQ~2) + fliQ() -> Growing_flagellar_export_apparatus_subunit(fliQ~3)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliQ~3) + fliQ() -> Growing_flagellar_export_apparatus_subunit(fliQ~4)  k_bind
    Growing_flagellar_export_apparatus_subunit(fliR~0) + fliR() -> Growing_flagellar_export_apparatus_subunit(fliR~1)  k_bind
    # Completion
    Growing_flagellar_export_apparatus_subunit(flagellar_motor_switch~1,flhA~9,flhB~1,fliI~6,fliJ~1,fliO~1,fliP~5,fliQ~4,fliR~1) -> flagellar_export_apparatus_subunit()  k_completion

    # === flagellar export apparatus reaction 2 ===
    # Product: flagellar export apparatus
    # Subunits: 1x flagellar export apparatus subunit, 12x fliH
    # Nucleation (rate scaled by 1/total_subunits)
    flagellar_export_apparatus_subunit() + fliH() -> Growing_flagellar_export_apparatus(flagellar_export_apparatus_subunit~1,fliH~1)  k_nuc_flagellar_export_apparatus
    Growing_flagellar_export_apparatus(fliH~1) + fliH() -> Growing_flagellar_export_apparatus(fliH~2)  k_bind
    Growing_flagellar_export_apparatus(fliH~2) + fliH() -> Growing_flagellar_export_apparatus(fliH~3)  k_bind
    Growing_flagellar_export_apparatus(fliH~3) + fliH() -> Growing_flagellar_export_apparatus(fliH~4)  k_bind
    Growing_flagellar_export_apparatus(fliH~4) + fliH() -> Growing_flagellar_export_apparatus(fliH~5)  k_bind
    Growing_flagellar_export_apparatus(fliH~5) + fliH() -> Growing_flagellar_export_apparatus(fliH~6)  k_bind
    Growing_flagellar_export_apparatus(fliH~6) + fliH() -> Growing_flagellar_export_apparatus(fliH~7)  k_bind
    Growing_flagellar_export_apparatus(fliH~7) + fliH() -> Growing_flagellar_export_apparatus(fliH~8)  k_bind
    Growing_flagellar_export_apparatus(fliH~8) + fliH() -> Growing_flagellar_export_apparatus(fliH~9)  k_bind
    Growing_flagellar_export_apparatus(fliH~9) + fliH() -> Growing_flagellar_export_apparatus(fliH~10)  k_bind
    Growing_flagellar_export_apparatus(fliH~10) + fliH() -> Growing_flagellar_export_apparatus(fliH~11)  k_bind
    Growing_flagellar_export_apparatus(fliH~11) + fliH() -> Growing_flagellar_export_apparatus(fliH~12)  k_bind
    # Completion
    Growing_flagellar_export_apparatus(flagellar_export_apparatus_subunit~1,fliH~12) -> flagellar_export_apparatus()  k_completion

    # === flagellar motor reaction ===
    # Product: flagellar motor
    # Subunits: 1x flagellar export apparatus, 2x fliL, 26x flgH, 55x motA, 22x motB, 5x flgB, 6x flgC, 5x flgF, 24x flgG, 26x flgI, 6x fliE
    # Nucleation (rate scaled by 1/total_subunits)
    flagellar_export_apparatus() + fliL() -> Growing_flagellar_motor(flagellar_export_apparatus~1,flgB~0,flgC~0,flgF~0,flgG~0,flgH~0,flgI~0,fliE~0,fliL~1,motA~0,motB~0)  k_nuc_flagellar_motor
    Growing_flagellar_motor(flgB~0) + flgB() -> Growing_flagellar_motor(flgB~1)  k_bind
    Growing_flagellar_motor(flgB~1) + flgB() -> Growing_flagellar_motor(flgB~2)  k_bind
    Growing_flagellar_motor(flgB~2) + flgB() -> Growing_flagellar_motor(flgB~3)  k_bind
    Growing_flagellar_motor(flgB~3) + flgB() -> Growing_flagellar_motor(flgB~4)  k_bind
    Growing_flagellar_motor(flgB~4) + flgB() -> Growing_flagellar_motor(flgB~5)  k_bind
    Growing_flagellar_motor(flgC~0) + flgC() -> Growing_flagellar_motor(flgC~1)  k_bind
    Growing_flagellar_motor(flgC~1) + flgC() -> Growing_flagellar_motor(flgC~2)  k_bind
    Growing_flagellar_motor(flgC~2) + flgC() -> Growing_flagellar_motor(flgC~3)  k_bind
    Growing_flagellar_motor(flgC~3) + flgC() -> Growing_flagellar_motor(flgC~4)  k_bind
    Growing_flagellar_motor(flgC~4) + flgC() -> Growing_flagellar_motor(flgC~5)  k_bind
    Growing_flagellar_motor(flgC~5) + flgC() -> Growing_flagellar_motor(flgC~6)  k_bind
    Growing_flagellar_motor(flgF~0) + flgF() -> Growing_flagellar_motor(flgF~1)  k_bind
    Growing_flagellar_motor(flgF~1) + flgF() -> Growing_flagellar_motor(flgF~2)  k_bind
    Growing_flagellar_motor(flgF~2) + flgF() -> Growing_flagellar_motor(flgF~3)  k_bind
    Growing_flagellar_motor(flgF~3) + flgF() -> Growing_flagellar_motor(flgF~4)  k_bind
    Growing_flagellar_motor(flgF~4) + flgF() -> Growing_flagellar_motor(flgF~5)  k_bind
    Growing_flagellar_motor(flgG~0) + flgG() -> Growing_flagellar_motor(flgG~1)  k_bind
    Growing_flagellar_motor(flgG~1) + flgG() -> Growing_flagellar_motor(flgG~2)  k_bind
    Growing_flagellar_motor(flgG~2) + flgG() -> Growing_flagellar_motor(flgG~3)  k_bind
    Growing_flagellar_motor(flgG~3) + flgG() -> Growing_flagellar_motor(flgG~4)  k_bind
    Growing_flagellar_motor(flgG~4) + flgG() -> Growing_flagellar_motor(flgG~5)  k_bind
    Growing_flagellar_motor(flgG~5) + flgG() -> Growing_flagellar_motor(flgG~6)  k_bind
    Growing_flagellar_motor(flgG~6) + flgG() -> Growing_flagellar_motor(flgG~7)  k_bind
    Growing_flagellar_motor(flgG~7) + flgG() -> Growing_flagellar_motor(flgG~8)  k_bind
    Growing_flagellar_motor(flgG~8) + flgG() -> Growing_flagellar_motor(flgG~9)  k_bind
    Growing_flagellar_motor(flgG~9) + flgG() -> Growing_flagellar_motor(flgG~10)  k_bind
    Growing_flagellar_motor(flgG~10) + flgG() -> Growing_flagellar_motor(flgG~11)  k_bind
    Growing_flagellar_motor(flgG~11) + flgG() -> Growing_flagellar_motor(flgG~12)  k_bind
    Growing_flagellar_motor(flgG~12) + flgG() -> Growing_flagellar_motor(flgG~13)  k_bind
    Growing_flagellar_motor(flgG~13) + flgG() -> Growing_flagellar_motor(flgG~14)  k_bind
    Growing_flagellar_motor(flgG~14) + flgG() -> Growing_flagellar_motor(flgG~15)  k_bind
    Growing_flagellar_motor(flgG~15) + flgG() -> Growing_flagellar_motor(flgG~16)  k_bind
    Growing_flagellar_motor(flgG~16) + flgG() -> Growing_flagellar_motor(flgG~17)  k_bind
    Growing_flagellar_motor(flgG~17) + flgG() -> Growing_flagellar_motor(flgG~18)  k_bind
    Growing_flagellar_motor(flgG~18) + flgG() -> Growing_flagellar_motor(flgG~19)  k_bind
    Growing_flagellar_motor(flgG~19) + flgG() -> Growing_flagellar_motor(flgG~20)  k_bind
    Growing_flagellar_motor(flgG~20) + flgG() -> Growing_flagellar_motor(flgG~21)  k_bind
    Growing_flagellar_motor(flgG~21) + flgG() -> Growing_flagellar_motor(flgG~22)  k_bind
    Growing_flagellar_motor(flgG~22) + flgG() -> Growing_flagellar_motor(flgG~23)  k_bind
    Growing_flagellar_motor(flgG~23) + flgG() -> Growing_flagellar_motor(flgG~24)  k_bind
    Growing_flagellar_motor(flgH~0) + flgH() -> Growing_flagellar_motor(flgH~1)  k_bind
    Growing_flagellar_motor(flgH~1) + flgH() -> Growing_flagellar_motor(flgH~2)  k_bind
    Growing_flagellar_motor(flgH~2) + flgH() -> Growing_flagellar_motor(flgH~3)  k_bind
    Growing_flagellar_motor(flgH~3) + flgH() -> Growing_flagellar_motor(flgH~4)  k_bind
    Growing_flagellar_motor(flgH~4) + flgH() -> Growing_flagellar_motor(flgH~5)  k_bind
    Growing_flagellar_motor(flgH~5) + flgH() -> Growing_flagellar_motor(flgH~6)  k_bind
    Growing_flagellar_motor(flgH~6) + flgH() -> Growing_flagellar_motor(flgH~7)  k_bind
    Growing_flagellar_motor(flgH~7) + flgH() -> Growing_flagellar_motor(flgH~8)  k_bind
    Growing_flagellar_motor(flgH~8) + flgH() -> Growing_flagellar_motor(flgH~9)  k_bind
    Growing_flagellar_motor(flgH~9) + flgH() -> Growing_flagellar_motor(flgH~10)  k_bind
    Growing_flagellar_motor(flgH~10) + flgH() -> Growing_flagellar_motor(flgH~11)  k_bind
    Growing_flagellar_motor(flgH~11) + flgH() -> Growing_flagellar_motor(flgH~12)  k_bind
    Growing_flagellar_motor(flgH~12) + flgH() -> Growing_flagellar_motor(flgH~13)  k_bind
    Growing_flagellar_motor(flgH~13) + flgH() -> Growing_flagellar_motor(flgH~14)  k_bind
    Growing_flagellar_motor(flgH~14) + flgH() -> Growing_flagellar_motor(flgH~15)  k_bind
    Growing_flagellar_motor(flgH~15) + flgH() -> Growing_flagellar_motor(flgH~16)  k_bind
    Growing_flagellar_motor(flgH~16) + flgH() -> Growing_flagellar_motor(flgH~17)  k_bind
    Growing_flagellar_motor(flgH~17) + flgH() -> Growing_flagellar_motor(flgH~18)  k_bind
    Growing_flagellar_motor(flgH~18) + flgH() -> Growing_flagellar_motor(flgH~19)  k_bind
    Growing_flagellar_motor(flgH~19) + flgH() -> Growing_flagellar_motor(flgH~20)  k_bind
    Growing_flagellar_motor(flgH~20) + flgH() -> Growing_flagellar_motor(flgH~21)  k_bind
    Growing_flagellar_motor(flgH~21) + flgH() -> Growing_flagellar_motor(flgH~22)  k_bind
    Growing_flagellar_motor(flgH~22) + flgH() -> Growing_flagellar_motor(flgH~23)  k_bind
    Growing_flagellar_motor(flgH~23) + flgH() -> Growing_flagellar_motor(flgH~24)  k_bind
    Growing_flagellar_motor(flgH~24) + flgH() -> Growing_flagellar_motor(flgH~25)  k_bind
    Growing_flagellar_motor(flgH~25) + flgH() -> Growing_flagellar_motor(flgH~26)  k_bind
    Growing_flagellar_motor(flgI~0) + flgI() -> Growing_flagellar_motor(flgI~1)  k_bind
    Growing_flagellar_motor(flgI~1) + flgI() -> Growing_flagellar_motor(flgI~2)  k_bind
    Growing_flagellar_motor(flgI~2) + flgI() -> Growing_flagellar_motor(flgI~3)  k_bind
    Growing_flagellar_motor(flgI~3) + flgI() -> Growing_flagellar_motor(flgI~4)  k_bind
    Growing_flagellar_motor(flgI~4) + flgI() -> Growing_flagellar_motor(flgI~5)  k_bind
    Growing_flagellar_motor(flgI~5) + flgI() -> Growing_flagellar_motor(flgI~6)  k_bind
    Growing_flagellar_motor(flgI~6) + flgI() -> Growing_flagellar_motor(flgI~7)  k_bind
    Growing_flagellar_motor(flgI~7) + flgI() -> Growing_flagellar_motor(flgI~8)  k_bind
    Growing_flagellar_motor(flgI~8) + flgI() -> Growing_flagellar_motor(flgI~9)  k_bind
    Growing_flagellar_motor(flgI~9) + flgI() -> Growing_flagellar_motor(flgI~10)  k_bind
    Growing_flagellar_motor(flgI~10) + flgI() -> Growing_flagellar_motor(flgI~11)  k_bind
    Growing_flagellar_motor(flgI~11) + flgI() -> Growing_flagellar_motor(flgI~12)  k_bind
    Growing_flagellar_motor(flgI~12) + flgI() -> Growing_flagellar_motor(flgI~13)  k_bind
    Growing_flagellar_motor(flgI~13) + flgI() -> Growing_flagellar_motor(flgI~14)  k_bind
    Growing_flagellar_motor(flgI~14) + flgI() -> Growing_flagellar_motor(flgI~15)  k_bind
    Growing_flagellar_motor(flgI~15) + flgI() -> Growing_flagellar_motor(flgI~16)  k_bind
    Growing_flagellar_motor(flgI~16) + flgI() -> Growing_flagellar_motor(flgI~17)  k_bind
    Growing_flagellar_motor(flgI~17) + flgI() -> Growing_flagellar_motor(flgI~18)  k_bind
    Growing_flagellar_motor(flgI~18) + flgI() -> Growing_flagellar_motor(flgI~19)  k_bind
    Growing_flagellar_motor(flgI~19) + flgI() -> Growing_flagellar_motor(flgI~20)  k_bind
    Growing_flagellar_motor(flgI~20) + flgI() -> Growing_flagellar_motor(flgI~21)  k_bind
    Growing_flagellar_motor(flgI~21) + flgI() -> Growing_flagellar_motor(flgI~22)  k_bind
    Growing_flagellar_motor(flgI~22) + flgI() -> Growing_flagellar_motor(flgI~23)  k_bind
    Growing_flagellar_motor(flgI~23) + flgI() -> Growing_flagellar_motor(flgI~24)  k_bind
    Growing_flagellar_motor(flgI~24) + flgI() -> Growing_flagellar_motor(flgI~25)  k_bind
    Growing_flagellar_motor(flgI~25) + flgI() -> Growing_flagellar_motor(flgI~26)  k_bind
    Growing_flagellar_motor(fliE~0) + fliE() -> Growing_flagellar_motor(fliE~1)  k_bind
    Growing_flagellar_motor(fliE~1) + fliE() -> Growing_flagellar_motor(fliE~2)  k_bind
    Growing_flagellar_motor(fliE~2) + fliE() -> Growing_flagellar_motor(fliE~3)  k_bind
    Growing_flagellar_motor(fliE~3) + fliE() -> Growing_flagellar_motor(fliE~4)  k_bind
    Growing_flagellar_motor(fliE~4) + fliE() -> Growing_flagellar_motor(fliE~5)  k_bind
    Growing_flagellar_motor(fliE~5) + fliE() -> Growing_flagellar_motor(fliE~6)  k_bind
    Growing_flagellar_motor(fliL~1) + fliL() -> Growing_flagellar_motor(fliL~2)  k_bind
    Growing_flagellar_motor(motA~0) + motA() -> Growing_flagellar_motor(motA~1)  k_bind
    Growing_flagellar_motor(motA~1) + motA() -> Growing_flagellar_motor(motA~2)  k_bind
    Growing_flagellar_motor(motA~2) + motA() -> Growing_flagellar_motor(motA~3)  k_bind
    Growing_flagellar_motor(motA~3) + motA() -> Growing_flagellar_motor(motA~4)  k_bind
    Growing_flagellar_motor(motA~4) + motA() -> Growing_flagellar_motor(motA~5)  k_bind
    Growing_flagellar_motor(motA~5) + motA() -> Growing_flagellar_motor(motA~6)  k_bind
    Growing_flagellar_motor(motA~6) + motA() -> Growing_flagellar_motor(motA~7)  k_bind
    Growing_flagellar_motor(motA~7) + motA() -> Growing_flagellar_motor(motA~8)  k_bind
    Growing_flagellar_motor(motA~8) + motA() -> Growing_flagellar_motor(motA~9)  k_bind
    Growing_flagellar_motor(motA~9) + motA() -> Growing_flagellar_motor(motA~10)  k_bind
    Growing_flagellar_motor(motA~10) + motA() -> Growing_flagellar_motor(motA~11)  k_bind
    Growing_flagellar_motor(motA~11) + motA() -> Growing_flagellar_motor(motA~12)  k_bind
    Growing_flagellar_motor(motA~12) + motA() -> Growing_flagellar_motor(motA~13)  k_bind
    Growing_flagellar_motor(motA~13) + motA() -> Growing_flagellar_motor(motA~14)  k_bind
    Growing_flagellar_motor(motA~14) + motA() -> Growing_flagellar_motor(motA~15)  k_bind
    Growing_flagellar_motor(motA~15) + motA() -> Growing_flagellar_motor(motA~16)  k_bind
    Growing_flagellar_motor(motA~16) + motA() -> Growing_flagellar_motor(motA~17)  k_bind
    Growing_flagellar_motor(motA~17) + motA() -> Growing_flagellar_motor(motA~18)  k_bind
    Growing_flagellar_motor(motA~18) + motA() -> Growing_flagellar_motor(motA~19)  k_bind
    Growing_flagellar_motor(motA~19) + motA() -> Growing_flagellar_motor(motA~20)  k_bind
    Growing_flagellar_motor(motA~20) + motA() -> Growing_flagellar_motor(motA~21)  k_bind
    Growing_flagellar_motor(motA~21) + motA() -> Growing_flagellar_motor(motA~22)  k_bind
    Growing_flagellar_motor(motA~22) + motA() -> Growing_flagellar_motor(motA~23)  k_bind
    Growing_flagellar_motor(motA~23) + motA() -> Growing_flagellar_motor(motA~24)  k_bind
    Growing_flagellar_motor(motA~24) + motA() -> Growing_flagellar_motor(motA~25)  k_bind
    Growing_flagellar_motor(motA~25) + motA() -> Growing_flagellar_motor(motA~26)  k_bind
    Growing_flagellar_motor(motA~26) + motA() -> Growing_flagellar_motor(motA~27)  k_bind
    Growing_flagellar_motor(motA~27) + motA() -> Growing_flagellar_motor(motA~28)  k_bind
    Growing_flagellar_motor(motA~28) + motA() -> Growing_flagellar_motor(motA~29)  k_bind
    Growing_flagellar_motor(motA~29) + motA() -> Growing_flagellar_motor(motA~30)  k_bind
    Growing_flagellar_motor(motA~30) + motA() -> Growing_flagellar_motor(motA~31)  k_bind
    Growing_flagellar_motor(motA~31) + motA() -> Growing_flagellar_motor(motA~32)  k_bind
    Growing_flagellar_motor(motA~32) + motA() -> Growing_flagellar_motor(motA~33)  k_bind
    Growing_flagellar_motor(motA~33) + motA() -> Growing_flagellar_motor(motA~34)  k_bind
    Growing_flagellar_motor(motA~34) + motA() -> Growing_flagellar_motor(motA~35)  k_bind
    Growing_flagellar_motor(motA~35) + motA() -> Growing_flagellar_motor(motA~36)  k_bind
    Growing_flagellar_motor(motA~36) + motA() -> Growing_flagellar_motor(motA~37)  k_bind
    Growing_flagellar_motor(motA~37) + motA() -> Growing_flagellar_motor(motA~38)  k_bind
    Growing_flagellar_motor(motA~38) + motA() -> Growing_flagellar_motor(motA~39)  k_bind
    Growing_flagellar_motor(motA~39) + motA() -> Growing_flagellar_motor(motA~40)  k_bind
    Growing_flagellar_motor(motA~40) + motA() -> Growing_flagellar_motor(motA~41)  k_bind
    Growing_flagellar_motor(motA~41) + motA() -> Growing_flagellar_motor(motA~42)  k_bind
    Growing_flagellar_motor(motA~42) + motA() -> Growing_flagellar_motor(motA~43)  k_bind
    Growing_flagellar_motor(motA~43) + motA() -> Growing_flagellar_motor(motA~44)  k_bind
    Growing_flagellar_motor(motA~44) + motA() -> Growing_flagellar_motor(motA~45)  k_bind
    Growing_flagellar_motor(motA~45) + motA() -> Growing_flagellar_motor(motA~46)  k_bind
    Growing_flagellar_motor(motA~46) + motA() -> Growing_flagellar_motor(motA~47)  k_bind
    Growing_flagellar_motor(motA~47) + motA() -> Growing_flagellar_motor(motA~48)  k_bind
    Growing_flagellar_motor(motA~48) + motA() -> Growing_flagellar_motor(motA~49)  k_bind
    Growing_flagellar_motor(motA~49) + motA() -> Growing_flagellar_motor(motA~50)  k_bind
    Growing_flagellar_motor(motA~50) + motA() -> Growing_flagellar_motor(motA~51)  k_bind
    Growing_flagellar_motor(motA~51) + motA() -> Growing_flagellar_motor(motA~52)  k_bind
    Growing_flagellar_motor(motA~52) + motA() -> Growing_flagellar_motor(motA~53)  k_bind
    Growing_flagellar_motor(motA~53) + motA() -> Growing_flagellar_motor(motA~54)  k_bind
    Growing_flagellar_motor(motA~54) + motA() -> Growing_flagellar_motor(motA~55)  k_bind
    Growing_flagellar_motor(motB~0) + motB() -> Growing_flagellar_motor(motB~1)  k_bind
    Growing_flagellar_motor(motB~1) + motB() -> Growing_flagellar_motor(motB~2)  k_bind
    Growing_flagellar_motor(motB~2) + motB() -> Growing_flagellar_motor(motB~3)  k_bind
    Growing_flagellar_motor(motB~3) + motB() -> Growing_flagellar_motor(motB~4)  k_bind
    Growing_flagellar_motor(motB~4) + motB() -> Growing_flagellar_motor(motB~5)  k_bind
    Growing_flagellar_motor(motB~5) + motB() -> Growing_flagellar_motor(motB~6)  k_bind
    Growing_flagellar_motor(motB~6) + motB() -> Growing_flagellar_motor(motB~7)  k_bind
    Growing_flagellar_motor(motB~7) + motB() -> Growing_flagellar_motor(motB~8)  k_bind
    Growing_flagellar_motor(motB~8) + motB() -> Growing_flagellar_motor(motB~9)  k_bind
    Growing_flagellar_motor(motB~9) + motB() -> Growing_flagellar_motor(motB~10)  k_bind
    Growing_flagellar_motor(motB~10) + motB() -> Growing_flagellar_motor(motB~11)  k_bind
    Growing_flagellar_motor(motB~11) + motB() -> Growing_flagellar_motor(motB~12)  k_bind
    Growing_flagellar_motor(motB~12) + motB() -> Growing_flagellar_motor(motB~13)  k_bind
    Growing_flagellar_motor(motB~13) + motB() -> Growing_flagellar_motor(motB~14)  k_bind
    Growing_flagellar_motor(motB~14) + motB() -> Growing_flagellar_motor(motB~15)  k_bind
    Growing_flagellar_motor(motB~15) + motB() -> Growing_flagellar_motor(motB~16)  k_bind
    Growing_flagellar_motor(motB~16) + motB() -> Growing_flagellar_motor(motB~17)  k_bind
    Growing_flagellar_motor(motB~17) + motB() -> Growing_flagellar_motor(motB~18)  k_bind
    Growing_flagellar_motor(motB~18) + motB() -> Growing_flagellar_motor(motB~19)  k_bind
    Growing_flagellar_motor(motB~19) + motB() -> Growing_flagellar_motor(motB~20)  k_bind
    Growing_flagellar_motor(motB~20) + motB() -> Growing_flagellar_motor(motB~21)  k_bind
    Growing_flagellar_motor(motB~21) + motB() -> Growing_flagellar_motor(motB~22)  k_bind
    # Completion
    Growing_flagellar_motor(flagellar_export_apparatus~1,flgB~5,flgC~6,flgF~5,flgG~24,flgH~26,flgI~26,fliE~6,fliL~2,motA~55,motB~22) -> flagellar_motor()  k_completion

    # === flagellar hook reaction ===
    # Product: flagellar hook
    # Subunits: 120x flgE
    # Nucleation (rate scaled by 1/total_subunits)
    flgE() + flgE() -> Growing_flagellar_hook(flgE~2)  k_nuc_flagellar_hook
    Growing_flagellar_hook(flgE~2) + flgE() -> Growing_flagellar_hook(flgE~3)  k_bind
    Growing_flagellar_hook(flgE~3) + flgE() -> Growing_flagellar_hook(flgE~4)  k_bind
    Growing_flagellar_hook(flgE~4) + flgE() -> Growing_flagellar_hook(flgE~5)  k_bind
    Growing_flagellar_hook(flgE~5) + flgE() -> Growing_flagellar_hook(flgE~6)  k_bind
    Growing_flagellar_hook(flgE~6) + flgE() -> Growing_flagellar_hook(flgE~7)  k_bind
    Growing_flagellar_hook(flgE~7) + flgE() -> Growing_flagellar_hook(flgE~8)  k_bind
    Growing_flagellar_hook(flgE~8) + flgE() -> Growing_flagellar_hook(flgE~9)  k_bind
    Growing_flagellar_hook(flgE~9) + flgE() -> Growing_flagellar_hook(flgE~10)  k_bind
    Growing_flagellar_hook(flgE~10) + flgE() -> Growing_flagellar_hook(flgE~11)  k_bind
    Growing_flagellar_hook(flgE~11) + flgE() -> Growing_flagellar_hook(flgE~12)  k_bind
    Growing_flagellar_hook(flgE~12) + flgE() -> Growing_flagellar_hook(flgE~13)  k_bind
    Growing_flagellar_hook(flgE~13) + flgE() -> Growing_flagellar_hook(flgE~14)  k_bind
    Growing_flagellar_hook(flgE~14) + flgE() -> Growing_flagellar_hook(flgE~15)  k_bind
    Growing_flagellar_hook(flgE~15) + flgE() -> Growing_flagellar_hook(flgE~16)  k_bind
    Growing_flagellar_hook(flgE~16) + flgE() -> Growing_flagellar_hook(flgE~17)  k_bind
    Growing_flagellar_hook(flgE~17) + flgE() -> Growing_flagellar_hook(flgE~18)  k_bind
    Growing_flagellar_hook(flgE~18) + flgE() -> Growing_flagellar_hook(flgE~19)  k_bind
    Growing_flagellar_hook(flgE~19) + flgE() -> Growing_flagellar_hook(flgE~20)  k_bind
    Growing_flagellar_hook(flgE~20) + flgE() -> Growing_flagellar_hook(flgE~21)  k_bind
    Growing_flagellar_hook(flgE~21) + flgE() -> Growing_flagellar_hook(flgE~22)  k_bind
    Growing_flagellar_hook(flgE~22) + flgE() -> Growing_flagellar_hook(flgE~23)  k_bind
    Growing_flagellar_hook(flgE~23) + flgE() -> Growing_flagellar_hook(flgE~24)  k_bind
    Growing_flagellar_hook(flgE~24) + flgE() -> Growing_flagellar_hook(flgE~25)  k_bind
    Growing_flagellar_hook(flgE~25) + flgE() -> Growing_flagellar_hook(flgE~26)  k_bind
    Growing_flagellar_hook(flgE~26) + flgE() -> Growing_flagellar_hook(flgE~27)  k_bind
    Growing_flagellar_hook(flgE~27) + flgE() -> Growing_flagellar_hook(flgE~28)  k_bind
    Growing_flagellar_hook(flgE~28) + flgE() -> Growing_flagellar_hook(flgE~29)  k_bind
    Growing_flagellar_hook(flgE~29) + flgE() -> Growing_flagellar_hook(flgE~30)  k_bind
    Growing_flagellar_hook(flgE~30) + flgE() -> Growing_flagellar_hook(flgE~31)  k_bind
    Growing_flagellar_hook(flgE~31) + flgE() -> Growing_flagellar_hook(flgE~32)  k_bind
    Growing_flagellar_hook(flgE~32) + flgE() -> Growing_flagellar_hook(flgE~33)  k_bind
    Growing_flagellar_hook(flgE~33) + flgE() -> Growing_flagellar_hook(flgE~34)  k_bind
    Growing_flagellar_hook(flgE~34) + flgE() -> Growing_flagellar_hook(flgE~35)  k_bind
    Growing_flagellar_hook(flgE~35) + flgE() -> Growing_flagellar_hook(flgE~36)  k_bind
    Growing_flagellar_hook(flgE~36) + flgE() -> Growing_flagellar_hook(flgE~37)  k_bind
    Growing_flagellar_hook(flgE~37) + flgE() -> Growing_flagellar_hook(flgE~38)  k_bind
    Growing_flagellar_hook(flgE~38) + flgE() -> Growing_flagellar_hook(flgE~39)  k_bind
    Growing_flagellar_hook(flgE~39) + flgE() -> Growing_flagellar_hook(flgE~40)  k_bind
    Growing_flagellar_hook(flgE~40) + flgE() -> Growing_flagellar_hook(flgE~41)  k_bind
    Growing_flagellar_hook(flgE~41) + flgE() -> Growing_flagellar_hook(flgE~42)  k_bind
    Growing_flagellar_hook(flgE~42) + flgE() -> Growing_flagellar_hook(flgE~43)  k_bind
    Growing_flagellar_hook(flgE~43) + flgE() -> Growing_flagellar_hook(flgE~44)  k_bind
    Growing_flagellar_hook(flgE~44) + flgE() -> Growing_flagellar_hook(flgE~45)  k_bind
    Growing_flagellar_hook(flgE~45) + flgE() -> Growing_flagellar_hook(flgE~46)  k_bind
    Growing_flagellar_hook(flgE~46) + flgE() -> Growing_flagellar_hook(flgE~47)  k_bind
    Growing_flagellar_hook(flgE~47) + flgE() -> Growing_flagellar_hook(flgE~48)  k_bind
    Growing_flagellar_hook(flgE~48) + flgE() -> Growing_flagellar_hook(flgE~49)  k_bind
    Growing_flagellar_hook(flgE~49) + flgE() -> Growing_flagellar_hook(flgE~50)  k_bind
    Growing_flagellar_hook(flgE~50) + flgE() -> Growing_flagellar_hook(flgE~51)  k_bind
    Growing_flagellar_hook(flgE~51) + flgE() -> Growing_flagellar_hook(flgE~52)  k_bind
    Growing_flagellar_hook(flgE~52) + flgE() -> Growing_flagellar_hook(flgE~53)  k_bind
    Growing_flagellar_hook(flgE~53) + flgE() -> Growing_flagellar_hook(flgE~54)  k_bind
    Growing_flagellar_hook(flgE~54) + flgE() -> Growing_flagellar_hook(flgE~55)  k_bind
    Growing_flagellar_hook(flgE~55) + flgE() -> Growing_flagellar_hook(flgE~56)  k_bind
    Growing_flagellar_hook(flgE~56) + flgE() -> Growing_flagellar_hook(flgE~57)  k_bind
    Growing_flagellar_hook(flgE~57) + flgE() -> Growing_flagellar_hook(flgE~58)  k_bind
    Growing_flagellar_hook(flgE~58) + flgE() -> Growing_flagellar_hook(flgE~59)  k_bind
    Growing_flagellar_hook(flgE~59) + flgE() -> Growing_flagellar_hook(flgE~60)  k_bind
    Growing_flagellar_hook(flgE~60) + flgE() -> Growing_flagellar_hook(flgE~61)  k_bind
    Growing_flagellar_hook(flgE~61) + flgE() -> Growing_flagellar_hook(flgE~62)  k_bind
    Growing_flagellar_hook(flgE~62) + flgE() -> Growing_flagellar_hook(flgE~63)  k_bind
    Growing_flagellar_hook(flgE~63) + flgE() -> Growing_flagellar_hook(flgE~64)  k_bind
    Growing_flagellar_hook(flgE~64) + flgE() -> Growing_flagellar_hook(flgE~65)  k_bind
    Growing_flagellar_hook(flgE~65) + flgE() -> Growing_flagellar_hook(flgE~66)  k_bind
    Growing_flagellar_hook(flgE~66) + flgE() -> Growing_flagellar_hook(flgE~67)  k_bind
    Growing_flagellar_hook(flgE~67) + flgE() -> Growing_flagellar_hook(flgE~68)  k_bind
    Growing_flagellar_hook(flgE~68) + flgE() -> Growing_flagellar_hook(flgE~69)  k_bind
    Growing_flagellar_hook(flgE~69) + flgE() -> Growing_flagellar_hook(flgE~70)  k_bind
    Growing_flagellar_hook(flgE~70) + flgE() -> Growing_flagellar_hook(flgE~71)  k_bind
    Growing_flagellar_hook(flgE~71) + flgE() -> Growing_flagellar_hook(flgE~72)  k_bind
    Growing_flagellar_hook(flgE~72) + flgE() -> Growing_flagellar_hook(flgE~73)  k_bind
    Growing_flagellar_hook(flgE~73) + flgE() -> Growing_flagellar_hook(flgE~74)  k_bind
    Growing_flagellar_hook(flgE~74) + flgE() -> Growing_flagellar_hook(flgE~75)  k_bind
    Growing_flagellar_hook(flgE~75) + flgE() -> Growing_flagellar_hook(flgE~76)  k_bind
    Growing_flagellar_hook(flgE~76) + flgE() -> Growing_flagellar_hook(flgE~77)  k_bind
    Growing_flagellar_hook(flgE~77) + flgE() -> Growing_flagellar_hook(flgE~78)  k_bind
    Growing_flagellar_hook(flgE~78) + flgE() -> Growing_flagellar_hook(flgE~79)  k_bind
    Growing_flagellar_hook(flgE~79) + flgE() -> Growing_flagellar_hook(flgE~80)  k_bind
    Growing_flagellar_hook(flgE~80) + flgE() -> Growing_flagellar_hook(flgE~81)  k_bind
    Growing_flagellar_hook(flgE~81) + flgE() -> Growing_flagellar_hook(flgE~82)  k_bind
    Growing_flagellar_hook(flgE~82) + flgE() -> Growing_flagellar_hook(flgE~83)  k_bind
    Growing_flagellar_hook(flgE~83) + flgE() -> Growing_flagellar_hook(flgE~84)  k_bind
    Growing_flagellar_hook(flgE~84) + flgE() -> Growing_flagellar_hook(flgE~85)  k_bind
    Growing_flagellar_hook(flgE~85) + flgE() -> Growing_flagellar_hook(flgE~86)  k_bind
    Growing_flagellar_hook(flgE~86) + flgE() -> Growing_flagellar_hook(flgE~87)  k_bind
    Growing_flagellar_hook(flgE~87) + flgE() -> Growing_flagellar_hook(flgE~88)  k_bind
    Growing_flagellar_hook(flgE~88) + flgE() -> Growing_flagellar_hook(flgE~89)  k_bind
    Growing_flagellar_hook(flgE~89) + flgE() -> Growing_flagellar_hook(flgE~90)  k_bind
    Growing_flagellar_hook(flgE~90) + flgE() -> Growing_flagellar_hook(flgE~91)  k_bind
    Growing_flagellar_hook(flgE~91) + flgE() -> Growing_flagellar_hook(flgE~92)  k_bind
    Growing_flagellar_hook(flgE~92) + flgE() -> Growing_flagellar_hook(flgE~93)  k_bind
    Growing_flagellar_hook(flgE~93) + flgE() -> Growing_flagellar_hook(flgE~94)  k_bind
    Growing_flagellar_hook(flgE~94) + flgE() -> Growing_flagellar_hook(flgE~95)  k_bind
    Growing_flagellar_hook(flgE~95) + flgE() -> Growing_flagellar_hook(flgE~96)  k_bind
    Growing_flagellar_hook(flgE~96) + flgE() -> Growing_flagellar_hook(flgE~97)  k_bind
    Growing_flagellar_hook(flgE~97) + flgE() -> Growing_flagellar_hook(flgE~98)  k_bind
    Growing_flagellar_hook(flgE~98) + flgE() -> Growing_flagellar_hook(flgE~99)  k_bind
    Growing_flagellar_hook(flgE~99) + flgE() -> Growing_flagellar_hook(flgE~100)  k_bind
    Growing_flagellar_hook(flgE~100) + flgE() -> Growing_flagellar_hook(flgE~101)  k_bind
    Growing_flagellar_hook(flgE~101) + flgE() -> Growing_flagellar_hook(flgE~102)  k_bind
    Growing_flagellar_hook(flgE~102) + flgE() -> Growing_flagellar_hook(flgE~103)  k_bind
    Growing_flagellar_hook(flgE~103) + flgE() -> Growing_flagellar_hook(flgE~104)  k_bind
    Growing_flagellar_hook(flgE~104) + flgE() -> Growing_flagellar_hook(flgE~105)  k_bind
    Growing_flagellar_hook(flgE~105) + flgE() -> Growing_flagellar_hook(flgE~106)  k_bind
    Growing_flagellar_hook(flgE~106) + flgE() -> Growing_flagellar_hook(flgE~107)  k_bind
    Growing_flagellar_hook(flgE~107) + flgE() -> Growing_flagellar_hook(flgE~108)  k_bind
    Growing_flagellar_hook(flgE~108) + flgE() -> Growing_flagellar_hook(flgE~109)  k_bind
    Growing_flagellar_hook(flgE~109) + flgE() -> Growing_flagellar_hook(flgE~110)  k_bind
    Growing_flagellar_hook(flgE~110) + flgE() -> Growing_flagellar_hook(flgE~111)  k_bind
    Growing_flagellar_hook(flgE~111) + flgE() -> Growing_flagellar_hook(flgE~112)  k_bind
    Growing_flagellar_hook(flgE~112) + flgE() -> Growing_flagellar_hook(flgE~113)  k_bind
    Growing_flagellar_hook(flgE~113) + flgE() -> Growing_flagellar_hook(flgE~114)  k_bind
    Growing_flagellar_hook(flgE~114) + flgE() -> Growing_flagellar_hook(flgE~115)  k_bind
    Growing_flagellar_hook(flgE~115) + flgE() -> Growing_flagellar_hook(flgE~116)  k_bind
    Growing_flagellar_hook(flgE~116) + flgE() -> Growing_flagellar_hook(flgE~117)  k_bind
    Growing_flagellar_hook(flgE~117) + flgE() -> Growing_flagellar_hook(flgE~118)  k_bind
    Growing_flagellar_hook(flgE~118) + flgE() -> Growing_flagellar_hook(flgE~119)  k_bind
    Growing_flagellar_hook(flgE~119) + flgE() -> Growing_flagellar_hook(flgE~120)  k_bind
    # Completion
    Growing_flagellar_hook(flgE~120) -> flagellar_hook()  k_completion

    # === flagellum reaction ===
    # Product: flagella
    # Subunits: 1x flagellar motor, 11x flgL, 11x flgK, 5x fliD, 1x flagellar hook
    # Nucleation (rate scaled by 1/total_subunits)
    flagellar_motor() + flagellar_hook() -> Growing_flagella(flagellar_hook~1,flagellar_motor~1,flgK~0,flgL~0,fliD~0)  k_nuc_flagella
    Growing_flagella(flgK~0) + flgK() -> Growing_flagella(flgK~1)  k_bind
    Growing_flagella(flgK~1) + flgK() -> Growing_flagella(flgK~2)  k_bind
    Growing_flagella(flgK~2) + flgK() -> Growing_flagella(flgK~3)  k_bind
    Growing_flagella(flgK~3) + flgK() -> Growing_flagella(flgK~4)  k_bind
    Growing_flagella(flgK~4) + flgK() -> Growing_flagella(flgK~5)  k_bind
    Growing_flagella(flgK~5) + flgK() -> Growing_flagella(flgK~6)  k_bind
    Growing_flagella(flgK~6) + flgK() -> Growing_flagella(flgK~7)  k_bind
    Growing_flagella(flgK~7) + flgK() -> Growing_flagella(flgK~8)  k_bind
    Growing_flagella(flgK~8) + flgK() -> Growing_flagella(flgK~9)  k_bind
    Growing_flagella(flgK~9) + flgK() -> Growing_flagella(flgK~10)  k_bind
    Growing_flagella(flgK~10) + flgK() -> Growing_flagella(flgK~11)  k_bind
    Growing_flagella(flgL~0) + flgL() -> Growing_flagella(flgL~1)  k_bind
    Growing_flagella(flgL~1) + flgL() -> Growing_flagella(flgL~2)  k_bind
    Growing_flagella(flgL~2) + flgL() -> Growing_flagella(flgL~3)  k_bind
    Growing_flagella(flgL~3) + flgL() -> Growing_flagella(flgL~4)  k_bind
    Growing_flagella(flgL~4) + flgL() -> Growing_flagella(flgL~5)  k_bind
    Growing_flagella(flgL~5) + flgL() -> Growing_flagella(flgL~6)  k_bind
    Growing_flagella(flgL~6) + flgL() -> Growing_flagella(flgL~7)  k_bind
    Growing_flagella(flgL~7) + flgL() -> Growing_flagella(flgL~8)  k_bind
    Growing_flagella(flgL~8) + flgL() -> Growing_flagella(flgL~9)  k_bind
    Growing_flagella(flgL~9) + flgL() -> Growing_flagella(flgL~10)  k_bind
    Growing_flagella(flgL~10) + flgL() -> Growing_flagella(flgL~11)  k_bind
    Growing_flagella(fliD~0) + fliD() -> Growing_flagella(fliD~1)  k_bind
    Growing_flagella(fliD~1) + fliD() -> Growing_flagella(fliD~2)  k_bind
    Growing_flagella(fliD~2) + fliD() -> Growing_flagella(fliD~3)  k_bind
    Growing_flagella(fliD~3) + fliD() -> Growing_flagella(fliD~4)  k_bind
    Growing_flagella(fliD~4) + fliD() -> Growing_flagella(fliD~5)  k_bind
    # Completion
    Growing_flagella(flagellar_hook~1,flagellar_motor~1,flgK~11,flgL~11,fliD~5) -> flagella()  k_completion

end reaction rules

end model